PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = -1.0000, -1.0000, -1.0000
  expName = Action Planning Choice Task - 11.29.2023
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code1
      Code Type = Auto->JS
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      Begin Routine:
        # set empty variables
        # keys = event.getKeys()
        # complResp = []

        #if PlanNoPlan == 'plan' and len(keys) == 3:
        #    complResp = 1
        #elif PlanNoPlan == 'noplan' and len(keys) == 'None':
        #    complResp = 1
        #else:
        #    complResp = 0

        # Get keys and determine if 3 have been pressed
        if key_resp_3.corr == 1:
            ApracFeedback.text = "Correct!\n\nGreat Job!"
        else:
            ApracFeedback.text = "Incorrect!"
    ImageComponent imageFix1
      image = Fixation.bmp
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.250
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    ImageComponent imageEventA
      image [set every repeat] = $Apracimage
      size = (0.1, 0.2)
      startVal [time (s)] = 1.250
      stopVal [duration (s)] = 1.500
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    ImageComponent imageFix2
      image = Fixation.bmp
      size = (0.1, 0.2)
      startVal [time (s)] = 2.750
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp_3
      correctAns = $CorrectAns
      forceEndRoutine = False
      startVal [time (s)] = 1.250
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    TextComponent ApracFeedback
      color [set every repeat] = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 2.5
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  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to the Action Planning Task!


        Try to stay engaged and focoused throughout the instructions and study tasks.

        Please read all the instructions carefully.



        Press the space bar to start instructions.
    KeyboardComponent keyNext1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent text_3END
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        The study is now complete. Thanks very much for participating.


        Have a great day!
  Routine Instr1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Before you start study trials you will need to comforably rest your hands on the keyboard so your left index finger is on the f key, and your right index finger is on the k key. An example of how you should rest your hands is shown below.



        Press the space key to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Hands1
      image = Action Planning Task Instr and Stim Images/Stim Images/Hands1.3.jpg
      pos = (0, -.5)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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  Routine StartTrial
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    TextComponent text_3StartTrial1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the space bar to start the next trial. 
      wrapWidth = 1.5
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Apracnotice
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You are about to start training trails for the retained action stimuli.

        Once you initiate a trial, either an arrowhead and astrisk or two outward pointing arrows will appear.

        If you see an arrowhead and astrisk, respond with the appropriate three button press.

        If you see two outward pointing arrows do not respond and wait for the trial to end.



        Press the space bar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Instr1
  Routine Apracnotice
  LoopInitiator trialsApra loopType="TrialHandler"
    conditionsFile = Apraclist.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Apracimage': 'leftup.bmp', 'CorrectAns': ['f', 't', 'f'], 'PlanNoPlan': 'plan'},
      {'Apracimage': 'leftdown.bmp', 'CorrectAns': ['f', 'v', 'f'], 'PlanNoPlan': 'plan'},
      {'Apracimage': 'rightup.bmp', 'CorrectAns': ['k', 'I', 'k'], 'PlanNoPlan': 'plan'},
      {'Apracimage': 'rightdown.bmp', 'CorrectAns': ['k', 'm', 'k'], 'PlanNoPlan': 'plan'},
      {'Apracimage': 'noplan.bmp', 'CorrectAns': ['None'], 'PlanNoPlan': 'noplan'}]
    Routine StartTrial
    Routine trial
  LoopTerminator trialsApra
  Routine End
